CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:71
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (and (file does containregexp "40x|63x") (file does contain "maxz-proj") (file doesnot contain "+SHP2") (file doesnot contain "SHP2-PLA-ab-IF-ctrl") (file doesnot contain "IF-only") (file doesnot contain "_2.2")) (file does contain ".czi") (file doesnot contain "IF-only") (file doesnot contain "PLA-only")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Experiment>.*)_(?P<Sample>.*)_(?P<Treatment>.*)_(?P<Antibodies>.*)_(?P<Magnification>.*)_(?P<zstack>.*)_(?P<FOV>.*)_(?P<proj>.*).czi
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Original
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Nuclei_in
    Channel number:4
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    Image name:PLA_in
    Channel number:3
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    Image name:IF_in
    Channel number:2
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    Image name:mvHRas_in

RescaleIntensity:[module_num:6|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
    Select the input image:Nuclei_in
    Name the output image:Nuclei
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:7|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
    Select the input image:PLA_in
    Name the output image:PLA
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:8|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
    Select the input image:IF_in
    Name the output image:IF
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:9|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
    Select the input image:mvHRas_in
    Name the output image:mvHRas
    Rescaling method:Divide by the image's maximum
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
HistogramEqualization:[module_num:10|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enabled:False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
    Select the input image:mvHRas
    Name the output image:mvHRas_HistogramEqualization
    Bins:256
    Mask:mvHRas
    Local:No
    Kernel Size:256

CorrectIlluminationCalculate:[module_num:11|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enabled:False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
    Select the input image:mvHRas_HistogramEqualization
    Name the output image:mvHRas_illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:12|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enabled:False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
    Select the input image:mvHRas_HistogramEqualization
    Name the output image:mvHRas_corrected
    Select the illumination function:mvHRas_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ReduceNoise:[module_num:13|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enabled:False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
    Select the input image:mvHRas_HistogramEqualization
    Name the output image:mvHRas_ReduceNoise
    Size:1
    Distance:11
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:14|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enabled:False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
    Select the input image:mvHRas_ReduceNoise
    Name the primary objects to be identified:Cells_mvHRas
    Typical diameter of objects, in pixel units (Min,Max):200,4000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.08
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:15|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enabled:False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
    Select the input image:mvHRas_ReduceNoise
    Name the primary objects to be identified:Cells_mvHRas
    Typical diameter of objects, in pixel units (Min,Max):200,4000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
CorrectIlluminationCalculate:[module_num:16|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enabled:False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
    Select the input image:Nuclei
    Name the output image:Nuclei_illum
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:17|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enabled:False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
    Select the input image:Nuclei
    Name the output image:Nuclei_corrected
    Select the illumination function:Nuclei_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:IF
    Name the output image:IF_illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:19|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
    Select the input image:IF
    Name the output image:IF_corrected
    Select the illumination function:IF_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

HistogramEqualization:[module_num:20|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enabled:False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
    Select the input image:IF_corrected
    Name the output image:IFcorrectedHistEq
    Bins:256
    Mask:mvHRas
    Local:No
    Kernel Size:256

CorrectIlluminationCalculate:[module_num:21|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
    Select the input image:PLA
    Name the output image:PLA_illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:22|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
    Select the input image:PLA
    Name the output image:PLA_corrected
    Select the illumination function:PLA_illum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Opening:[module_num:23|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
    Select the input image:Nuclei
    Name the output image:Nuclei_opened
    Structuring element:disk,5

GaussianFilter:[module_num:24|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
    Select the input image:Nuclei_opened
    Name the output image:GaussianFilter
    Sigma:1

Opening:[module_num:25|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
    Select the input image:GaussianFilter
    Name the output image:Nuclei_opened2
    Structuring element:disk,5

GaussianFilter:[module_num:26|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
    Select the input image:Nuclei_opened2
    Name the output image:GaussianFilter2
    Sigma:1

Opening:[module_num:27|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
    Select the input image:GaussianFilter2
    Name the output image:Nuclei_opened3
    Structuring element:disk,2

Opening:[module_num:28|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
    Select the input image:Nuclei_opened3
    Name the output image:Nuclei_opened4
    Structuring element:disk,2

TopHatTransform:[module_num:29|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enabled:False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
    Select the input image:IF_corrected
    Name the output image:IF_TopHatTransform
    Structuring element:disk,5
    Operation:White top-hat transform

TopHatTransform:[module_num:30|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enabled:False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
    Select the input image:PLA_corrected
    Name the output image:PLA_TopHatTransform
    Structuring element:disk,5
    Operation:White top-hat transform

LaplacianOfGaussian:[module_num:31|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
    Select the input image:IF_corrected
    Name the output image:IF_LoG1
    Sigma x:3
    Sigma y:3
    Sigma z:3

LaplacianOfGaussian:[module_num:32|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
    Select the input image:IF_corrected
    Name the output image:IF_LoG
    Sigma x:3
    Sigma y:3
    Sigma z:3

LaplacianOfGaussian:[module_num:33|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enabled:False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
    Select the input image:PLA_corrected
    Name the output image:PLA_LoG
    Sigma x:3
    Sigma y:3
    Sigma z:3

RescaleIntensity:[module_num:34|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
    Select the input image:IF_LoG
    Name the output image:IF_rescaled
    Rescaling method:Divide by the image's minimum
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
RescaleIntensity:[module_num:35|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
    Select the input image:IF_rescaled
    Name the output image:IF_rescaled2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:36|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enabled:False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
    Select the input image:PLA_LoG
    Name the output image:PLA_rescaled
    Rescaling method:Divide by the image's minimum
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
RescaleIntensity:[module_num:37|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enabled:False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
    Select the input image:PLA_rescaled
    Name the output image:PLA_rescaled2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.0,1.0
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
MeasureImageIntensity:[module_num:38|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
    Select images to measure:IF_rescaled2
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:0

ImageMath:[module_num:39|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:IF_ImageAfterMath
    Image or measurement?:Image
    Select the first image:IF_rescaled2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:IF_rescaled
    Multiply the second image by:-1.0
    Measurement:Intensity_MinIntensity_IF_rescaled2

TopHatTransform:[module_num:40|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
    Select the input image:IF_ImageAfterMath
    Name the output image:IF_TopHatTransform
    Structuring element:disk,20
    Operation:White top-hat transform

ImageMath:[module_num:41|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:PLA_ImageAfterMath
    Image or measurement?:Image
    Select the first image:PLA_rescaled2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:IF_rescaled
    Multiply the second image by:-1.0
    Measurement:Intensity_MinIntensity_PLA_rescaled2

TopHatTransform:[module_num:42|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
    Select the input image:PLA_corrected
    Name the output image:PLA_TopHatTransform
    Structuring element:disk,25
    Operation:White top-hat transform

Closing:[module_num:43|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enabled:False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
    Select the input image:PLA_rescaled
    Name the output image:PLA_closed
    Structuring element:Disk,10

Opening:[module_num:44|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enabled:False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
    Select the input image:PLA_closed
    Name the output image:PLA_opened
    Structuring element:disk,3

EnhanceOrSuppressFeatures:[module_num:45|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
    Select the input image:IF_TopHatTransform
    Name the output image:IF_enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:46|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enabled:False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
    Select the input image:IF_corrected
    Name the output image:IF_enhanced2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:47|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enabled:False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
    Select the input image:PLA_TopHatTransform
    Name the output image:PLA_enhanced
    Select the operation:Enhance
    Feature size:12
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:48|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
    Select the input image:PLA_TopHatTransform
    Name the output image:PLA_enhanced2
    Select the operation:Enhance
    Feature size:14
    Feature type:Speckles
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    Speed and accuracy:Slow
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
ReduceNoise:[module_num:49|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enabled:False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
    Select the input image:PLA_enhanced2
    Name the output image:ReduceNoise
    Size:7
    Distance:11
    Cut-off distance:0.1

HistogramEqualization:[module_num:50|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enabled:False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
    Select the input image:PLA_enhanced2
    Name the output image:HistogramEqualization
    Bins:256
    Mask:Leave blank
    Local:Yes
    Kernel Size:256

MaskImage:[module_num:51|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enabled:False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
    Select the input image:IF_enhanced
    Name the output image:IF_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells_mvHRas
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    Invert the mask?:No

MaskImage:[module_num:52|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enabled:False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
    Select the input image:PLA_enhanced
    Name the output image:PLA_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells_mvHRas
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    Invert the mask?:No

MaskImage:[module_num:53|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enabled:False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
    Select the input image:PLA_enhanced2
    Name the output image:PLA_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells_mvHRas
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    Invert the mask?:No

HistogramEqualization:[module_num:54|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
    Select the input image:IF_enhanced
    Name the output image:IFhistEQ
    Bins:256
    Mask:Leave blank
    Local:Yes
    Kernel Size:256

IdentifyPrimaryObjects:[module_num:55|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
    Select the input image:Nuclei_opened4
    Name the primary objects to be identified:Nuclei_primary_objects
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1
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
IdentifySecondaryObjects:[module_num:56|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enabled:False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
    Select the input objects:Nuclei_primary_objects
    Name the objects to be identified:Cells_mvHRas_2ndry
    Select the method to identify the secondary objects:Propagation
    Select the input image:mvHRas_ReduceNoise
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:57|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enabled:False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
    Select the input objects:Nuclei_primary_objects
    Name the objects to be identified:Cells_mvHRas_2ndry
    Select the method to identify the secondary objects:Propagation
    Select the input image:mvHRas_ReduceNoise
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.08
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:58|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
    Select the input image:IFhistEQ
    Name the primary objects to be identified:EGFR_primary
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:59|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enabled:False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
    Select the input image:IF_enhanced2
    Name the primary objects to be identified:EGFR_primary2
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:60|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enabled:False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
    Select the input image:PLA_masked
    Name the primary objects to be identified:PLA_primary_objects_old
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:61|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
    Select the input image:PLA_enhanced2
    Name the primary objects to be identified:PLA_primary_objects
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:62|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enabled:False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
    Select the input objects:PLA_primary_objects
    Name the output objects:PLA_shrunken
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
    Fill holes in objects so that all objects shrink to a single point?:Yes
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
MeasureObjectNeighbors:[module_num:63|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enabled:False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
    Select objects to measure:PLA_primary_objects
    Select neighboring objects to measure:EGFR_primary
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:64|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enabled:False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
    Select object sets to measure:Nuclei_primary_objects, PLA_primary_objects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:65|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
    Parent objects:EGFR_primary
    Child objects:PLA_primary_objects
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:EGFR_PLA_RelatedObjects
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
RelateObjects:[module_num:66|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enabled:False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
    Parent objects:EGFR_primary
    Child objects:PLA_shrunken
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:EGFR_PLA_RelatedObjects3
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
RelateObjects:[module_num:67|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enabled:False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
    Parent objects:Cells_mvHRas_2ndry
    Child objects:EGFR_PLA_RelatedObjects
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:EGFR_PLA_coloc_per_cell
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
RelateObjects:[module_num:68|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enabled:False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
    Parent objects:Cells_mvHRas_2ndry
    Child objects:PLA_primary_objects
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PLA_mVHRas_RelatedObjects
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
RelateObjects:[module_num:69|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enabled:False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
    Parent objects:Cells_mvHRas_2ndry
    Child objects:PLA_primary_objects
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PLA_mVHRas_RelatedObjects
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
ClassifyObjects:[module_num:70|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enabled:False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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:PLA_primary_objects
    Select the measurement to classify by:Children_EGFR_primary_Count
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.5
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.3
    Give each bin a name?:Yes
    Enter the bin names separated by commas:NotColocalized,Colocalized
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:EGFR_primary
    Select the first measurement:Children_Objects2_Count
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

ExportToSpreadsheet:[module_num:71|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - University of Virginia\\EGFR Endocytosis Project\\CMF spatial modeling manuscript\\Image analysis files\\Revisions
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:PLA_primary_objects|Location_Center_Y,PLA_primary_objects|Location_Center_Z,PLA_primary_objects|Location_Center_X,PLA_primary_objects|Number_Object_Number,PLA_primary_objects|Distance_Centroid_EGFR_primary,PLA_primary_objects|Distance_Minimum_EGFR_primary,PLA_primary_objects|Children_EGFR_PLA_RelatedObjects_Count,PLA_primary_objects|Parent_EGFR_primary,Image|Count_EGFR_primary,Image|Count_EGFR_PLA_RelatedObjects,Image|Count_Nuclei_primary_objects,Image|Count_PLA_primary_objects,Image|Width_Original,Image|Metadata_Magnification,Image|Metadata_Series,Image|Metadata_Treatment,Image|Metadata_proj,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
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:EGFR-GRB2_PLA-puncta-quant_40x+_max-zproj_2-10-23_2_
    Overwrite existing files without warning?:No
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